PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Memory_Task
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Routines
  Routine trial
    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent words
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $dur
      text [set every repeat] = $word_stim
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine Welcome_Screen
    ImageComponent image
      image = wel_scr.PNG
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Short_pass
    ImageComponent image_2
      image = Short_text.PNG
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye_screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The experiment has ended!

        Thank you for participating!!
  Routine get_ready
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready ---->
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Flow
  Routine Welcome_Screen
  Routine Short_pass
  Routine get_ready
  LoopInitiator conditions loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 1, 'dur': 0.5},
      {'cond': 2, 'dur': 1}]
    LoopInitiator word_stimuli loopType="TrialHandler"
      conditionsFile = Wordz.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'word_stim': 'breeder', 'correct_resp': 'right'},
        {'word_stim': 'hugged', 'correct_resp': 'right'},
        {'word_stim': 'minute', 'correct_resp': 'right'},
        {'word_stim': 'paused', 'correct_resp': 'right'},
        {'word_stim': 'two', 'correct_resp': 'right'},
        {'word_stim': 'spots', 'correct_resp': 'right'},
        {'word_stim': 'white', 'correct_resp': 'right'},
        {'word_stim': 'name', 'correct_resp': 'right'},
        {'word_stim': 'smiled', 'correct_resp': 'right'},
        {'word_stim': 'entryway', 'correct_resp': 'right'},
        {'word_stim': 'lick', 'correct_resp': 'right'},
        {'word_stim': 'keep', 'correct_resp': 'right'},
        {'word_stim': 'black', 'correct_resp': 'right'},
        {'word_stim': 'favourite', 'correct_resp': 'right'},
        {'word_stim': 'whistled', 'correct_resp': 'right'},
        {'word_stim': 'driveway', 'correct_resp': 'left'},
        {'word_stim': 'thinking', 'correct_resp': 'left'},
        {'word_stim': 'run', 'correct_resp': 'left'},
        {'word_stim': 'grey', 'correct_resp': 'left'},
        {'word_stim': 'dog', 'correct_resp': 'left'},
        {'word_stim': 'dad', 'correct_resp': 'left'},
        {'word_stim': 'family', 'correct_resp': 'left'},
        {'word_stim': 'cute', 'correct_resp': 'left'},
        {'word_stim': 'feared', 'correct_resp': 'left'},
        {'word_stim': 'region', 'correct_resp': 'left'},
        {'word_stim': 'frowned', 'correct_resp': 'left'},
        {'word_stim': 'man', 'correct_resp': 'left'},
        {'word_stim': 'call', 'correct_resp': 'left'},
        {'word_stim': 'small', 'correct_resp': 'left'},
        {'word_stim': 'shouted', 'correct_resp': 'left'}]
      Routine trial
    LoopTerminator word_stimuli
  LoopTerminator conditions
  Routine goodbye_screen
